PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'Data/Psychopy data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': '001', 'group': ''}
  Full-screen window = True
  Monitor = dellMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = design_ideation
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Routines
  Routine problem
    TextboxComponent design_problem
      bold = False
      borderColor = black
      color = black
      editable = False
      italic = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $problem
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    TextboxComponent title
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Consider the following design problem:
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(['Problem statement', str(design_problems.thisN + 1), str(stimuli),'','',''])
  Routine crosshair
    CodeComponent cross_time
      Code Type = Py
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      Begin Experiment:
        # Generate 12 random durations for cross between 0.5-4 s
        cross_times = list(randint(5,40,12)/10)
      Begin Routine:
        outlet.push_sample(['Crosshair', str(design_problems.thisN + 1), str(stimuli),'','',''])

        # Popping random time from randomized duration list
        cross_duration = cross_times.pop()
    PolygonComponent cross
      durationEstim = 4
      fillColor = black
      lineColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = cross_duration
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  Routine wordset_1
    TextboxComponent problem_1
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $problem
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    KeyboardComponent key_resp_3
      allowedKeys = 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = nothing
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(['Wordset 1', str(design_problems.thisN + 1), str(stimuli),'','',''])
        num_ideas = 0
      Each Frame:
        if 'space' in defaultKeyboard.getKeys(['space']):
            time = wordset_1Clock.getTime()

            if time > 0.1: # Not record presses from early on
                thisExp.addData('routine', 'wordset1')
                thisExp.addData('idea_timestamp',time)
                thisExp.nextEntry()
                outlet.push_sample(['Idea generated', str(design_problems.thisN + 1), str(stimuli),str(time), '', ''])
                num_ideas += 1
      End Routine:
        thisExp.addData('routine','wordset1')
        thisExp.addData('idea_total',num_ideas)
        thisExp.nextEntry()
        outlet.push_sample(['Wordset 1', str(design_problems.thisN + 1), str(stimuli), '', 'Total ideas generated', str(num_ideas)])
    TextboxComponent press_1
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0.15, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Press <SPACE> each time you think of a new idea.
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    TextboxComponent border_1
      bold = False
      borderColor = black
      color = black
      editable = False
      italic = True
      letterHeight = 0.05
      padding = 0.1
      saveStartStop = False
      size = (1.3,0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = $''
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    TextComponent word1_1
      color = black
      letterHeight = 0.05
      pos = (-0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word1
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    TextComponent word2_1
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word2
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    TextComponent word3_1
      color = black
      letterHeight = 0.05
      pos = (0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word3
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  Routine wordset_2
    TextboxComponent problem_2
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $problem
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    KeyboardComponent key_resp_2
      allowedKeys = 'right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = nothing
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(['Wordset 2', str(design_problems.thisN + 1), str(stimuli),'', '', ''])
        num_ideas = 0

        firstRow_y = 0.03
        secondRow_y = -0.22
      Each Frame:
        if 'space' in defaultKeyboard.getKeys(['space']):
            time = wordset_2Clock.getTime()

            if time > 0.1: # Not record presses from early on
                thisExp.addData('routine', 'wordset2')
                thisExp.addData('idea_timestamp',time)
                thisExp.nextEntry()

                outlet.push_sample(['Idea generated', str(design_problems.thisN + 1), str(stimuli),str(time), '', ''])
                num_ideas += 1
      End Routine:
        thisExp.addData('routine','wordset2')
        thisExp.addData('idea_total',num_ideas)
        thisExp.nextEntry()
        outlet.push_sample(['Wordset 2', str(design_problems.thisN + 1), str(stimuli), '', 'Total ideas generated', str(num_ideas)])
    TextboxComponent press_2
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0.15, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Press <SPACE> each time you think of a new idea.
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    TextboxComponent border_2
      bold = False
      borderColor = black
      color = black
      editable = False
      italic = True
      letterHeight = 0.05
      padding = 0.1
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.3,0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = $''
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    TextComponent word1_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (-0.45, firstRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word1
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    TextComponent word2_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (0, firstRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word2
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    TextComponent word3_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (0.45, firstRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word3
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    TextComponent word4_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (-0.25, secondRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word4
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    TextComponent word5_2
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (0.25, secondRow_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $word5
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    TextComponent line
      color = black
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = -  -  -  -  -  -  -
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  Routine one_back_instr
    ImageComponent one_back_illustration
      durationEstim = 10
      image = Media\one_back.png
      pos = (0.45, 0)
      saveStartStop = False
      size = 0.55
      startVal [time (s)] = 0.0
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    TextboxComponent one_back_text
      bold = False
      color = black
      durationEstim = 10
      editable = False
      letterHeight = 0.035
      pos = (-0.3, 0)
      saveStartStop = False
      size = [0.8,0.6]
      startVal [time (s)] = 0.0
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      text:
        Between the design ideation, a simple memory task called "1-back" will be performed.

        Your goal is to indicate if a letter is similar to the previous one by pressing <SPACE>.
        If they are different from each other, no action is required. Each letter will be shown for appx. 2 seconds or until <SPACE> is pressed.

        An example is shown in the illustration to the right.
    TextboxComponent instr_begin
      bold = False
      color = black
      durationEstim = 10
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0.2, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press <SPACE> to begin the experiment. 
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    KeyboardComponent one_back_instr_click
      allowedKeys = 'space'
      durationEstim = 10
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(['One-back instructions','','','','',''])
  Routine thanks
    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        import datetime
      Begin Routine:
        total_seconds = instrClock.getTime()
        time_string = str(datetime.timedelta(seconds=int(total_seconds)))

        outlet.push_sample(['Experiment finished','','', '', 'Total seconds', str(total_seconds)])
    TextComponent thanks_text
      color = black
      durationEstim = 10
      letterHeight = 0.08
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Thank you for taking part in the experiment!
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    TextComponent time_text
      color = black
      durationEstim = 10
      letterHeight = 0.08
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'Total time: {time_string}'
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    KeyboardComponent exp_done
      allowedKeys = 'space'
      discard previous = False
      durationEstim = 10
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    TextComponent question_title
      color = black
      durationEstim = 10
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $question
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    TextComponent min_label
      color = black
      durationEstim = 10
      letterHeight = 0.05
      pos = (-0.5, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $label_min.split(' ')[0] + '\n' + label_min.split(' ')[1]
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    TextComponent max_label
      color = black
      durationEstim = 10
      letterHeight = 0.05
      pos = (0.5, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $label_max.split(' ')[0] + '\n' + label_min.split(' ')[1]
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    ImageComponent one
      durationEstim = 10
      image = Media\one.png
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    ImageComponent two
      durationEstim = 10
      image = Media\two.png
      pos = (-0.25, 0)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    ImageComponent three
      durationEstim = 10
      image = Media\three.png
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    ImageComponent four
      durationEstim = 10
      image = Media\four.png
      pos = (0.25, 0)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    ImageComponent five
      durationEstim = 10
      image = Media\five.png
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.15, 0.15)
      startVal [time (s)] = 0.5
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    MouseComponent feedback_click
      clickable = one,two,three,four,five
      durationEstim = 10
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent feedback_code
      Code Type = Py
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      Before Experiment:
        word2int = {'one': 1, 'two':2, 'three':3, 'four':4, 'five':5}
      Begin Routine:
        outlet.push_sample(['Feedback', str(design_problems.thisN + 1), str(stimuli),'', '', ''])
      Each Frame:
        if gotValidClick == True:
            thisExp.addData('routine', 'feedback')
            thisExp.addData('feedback_ans',word2int[feedback_click.clicked_name[0]])
            thisExp.nextEntry()

            outlet.push_sample(['Feedback answer', str(design_problems.thisN + 1), str(stimuli), '', str(question_id), str(word2int[feedback_click.clicked_name[0]])])
      End Routine:
        thisExp.addData('routine', 'feedback')
        thisExp.addData('feedback_ans',word2int[feedback_click.clicked_name[0]])
        thisExp.nextEntry()
  Routine one_back_begin
    TextComponent one_back_begin_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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      text:
        1-Back memory task will soon begin.

        Press <SPACE> if the letter is similar to the previous one.
    CodeComponent one_back_setup
      Code Type = Auto->JS
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      Begin Experiment:
        num_one_back = 20
        letters = ['A', 'B', 'C', 'D', 'E', 'F', 'G', 'H', 'I', 'J', 'K', 'L']
      Begin Routine:
        outlet.push_sample(['One-back initialize', str(design_problems.thisN + 1), str(stimuli),'', '', ''])

        # Init. counters to zero
        correct = 0
        total = 0

        # Init. letters for N-back
        p = 0.4 # Prob. of "true" stim
        bool_mask = randchoice([True, False], size=(num_one_back),p=[p,1-p])

        first_letter = randchoice(letters)
        one_back_stim = []

        for i in range(num_one_back):
            prev_stim = first_letter if i == 0 else one_back_stim[i-1]

            if bool_mask[i]:
                one_back_stim.append(prev_stim)
            else:
                new_stim = randchoice([x for x in letters if x!= prev_stim])
                one_back_stim.append(new_stim)


        #print(first_letter)
        #print(bool_mask)
        #print(one_back_stim)
      End Routine:
        # Begin timer after first_letter
        one_back_timer = core.CountdownTimer(22)
    TextComponent one_back_start_letter
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 5.75
      stopVal [duration (s)] = 2
      text [set every repeat] = $first_letter
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  Routine one_back
    CodeComponent one_back_code
      Code Type = Py
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      Begin Routine:
        n = currentLoop.thisN

        # Init stims.
        curr_stim = one_back_stim[n]
        prev_stim = first_letter if n == 0 else one_back_stim[n-1]
      Each Frame:
        if one_back_timer.getTime() < 0: # Stop when task timer is up
            # save data (not incl. current)
            thisExp.addData('routine', 'one_back')
            thisExp.addData('oneback_correct', correct)
            thisExp.addData('oneback_total', total)
            thisExp.addData('oneback_score', correct/total)
            thisExp.nextEntry()

            continueRoutine = False
            currentLoop.finished = True

            #print(f"{correct}/{total}")

        if one_backClock.getTime() >= 2.0:
            if not bool_mask[n]: #curr_stim != prev_stim:
                correct += 1
                total += 1
            else:
                total += 1

            continueRoutine = False

        # Check for space key press
        press_time = one_backClock.getTime()
        if 'space' in defaultKeyboard.getKeys(['space']) and press_time >= 0.25:
            if bool_mask[n]: #curr_stim == prev_stim:
                # Add only reaction time for correct "pushes"
                reaction_time = press_time - 0.25 #due to 0.25 delay
                thisExp.addData('routine', 'one_back')
                thisExp.addData('oneback_reaction', reaction_time)
                thisExp.nextEntry()

                outlet.push_sample(['One-back reaction time', str(design_problems.thisN + 1), str(stimuli), str(reaction_time), '', ''])

                correct += 1
                total += 1
            else:
                total += 1

            continueRoutine = False
    TextComponent stim_text
      color = black
      durationEstim = 2
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $curr_stim
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  Routine instr
    TextboxComponent instr_title
      anchor = center-left
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      pos = (-0.65, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Overview:
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    TextboxComponent instructions
      anchor = top-left
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      pos = (-0.645, 0.25)
      saveStartStop = False
      size = (1.2,0.5)
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be asked to come up with concept solutions to open ended design problems.
        During some problems you may receive a set of words which are intended to serve as inspiration for your concepts. You will see a total of 12 design problems. For each problem you will have 2 minutes to develop as many concepts as you can.

        Each time you think of a new concept, please indicate it by pressing <SPACE>.
    TextboxComponent instr_continue
      bold = False
      color = black
      editable = False
      italic = True
      letterHeight = 0.03
      pos = (0.3, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent instr_stop
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code_instr
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(['Instructions','','','','',''])
  Routine calibration_start
    ImageComponent marker_start
      image = Media\calibration_marker.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine calibration_stop
    ImageComponent marker_stop
      image = Media\stop_calibration_marker.jpg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine calibration
    CodeComponent lsl_init
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Add meta-data
        channel_names = ['Routine','Problem ID', 'Stimuli', 'Idea generation/Reaction time', 'Additional info/Feedback question', 'Total/Feedback answer']
        channel_type = ['string', 'int', 'string','float', 'string', 'string']

        info = StreamInfo(name='Psychopy', type='Markers', channel_count=len(channel_names),
                          channel_format='string', source_id='uniqueid12345')


        chns = info.desc().append_child("channels")
        for label,ch_type in zip(channel_names, channel_type):
            ch = chns.append_child("channel")
            ch.append_child_value("label", label)
            ch.append_child_value("type", ch_type)


        # Initialize the stream.
        outlet = StreamOutlet(info)
      Begin Experiment:
        outlet.push_sample(['Initalize PsychoPy','','','','',''])
      Begin Routine:
        outlet.push_sample(['Calibration','','','','',''])
    KeyboardComponent start_exp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent wait_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Waiting..
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Flow
  Routine calibration
  Routine instr
  Routine one_back_instr
  LoopInitiator design_problems loopType="TrialHandler"
    conditionsFile = $f"input_{expInfo['group']}.xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine problem
    Routine crosshair
    Routine wordset_1
    Routine one_back_begin
    LoopInitiator one_back_loop_one loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = num_one_back
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      Routine one_back
    LoopTerminator one_back_loop_one
    Routine wordset_2
    LoopInitiator feedback_questions loopType="TrialHandler"
      conditionsFile = questions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'question_id': 'useful', 'question': 'How USEFUL were the words presented with this design problem?'},
        {'question_id': 'relevant', 'question': 'How RELEVANT were the words presented with this design problem?'},
        {'question_id': 'novelty', 'question': 'How was the overall NOVELTY (uniqueness) of the solutions you developed for this design problem?'},
        {'question_id': 'quality', 'question': 'How was the overall QUALITY (uniqueness) of the solutions you developed for this design problem?'}]
      Routine feedback
    LoopTerminator feedback_questions
    Routine one_back_begin
    LoopInitiator one_back_loop_two loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = num_one_back
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      Routine one_back
    LoopTerminator one_back_loop_two
  LoopTerminator design_problems
  Routine thanks
